WorkflowBuilder(Version=2.4.1)
GroupWorkflow Experiment => #0
  Description:
    Contains a timer to set legnt of trial
    Perfoms  recoding and analysis of open field behavoirs
    Started by pressing "1" key
    meant to allow for a delay while setting up each trial with each animal
  Workflow
    Timer(DueTime=PT20M, Period=PT0S)
    -> PublishSubject "timer for Exp"
    -> WorkflowOutput

    SubscribeSubject "Video feed"
    -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=33, Y=22, Width=372, Height=352)) => #4
    SubscribeSubject "centroid no NaN" => #5
    #4, #5 -> Zip
    -> Bonsai.Vision.ContainsPoint
    -> PublishSubject "Whole Arena"

    SubscribeSubject "centroid no NaN" => #9
    SubscribeSubject "Video feed"
    -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=88, Y=75, Width=255, Height=255)) => #11
    #11, #9 -> Zip
    -> Bonsai.Vision.ContainsPoint
    -> PublishSubject "Center area"

    Disable GroupWorkflow "Optional DigOut"(Description="Use this to control an output when the experiment is runing")
        BooleanProperty(Value=true) => #0
        SubscribeSubject "timer for Exp" => #1
        #0, #1 -> TakeUntil
        -> Bonsai.Arduino.DigitalOutput(PortName=ard1, Pin=13)
        -> WorkflowOutput
        BooleanProperty(Value=false) => #5
        #5, #1 -> SubscribeWhen
        -> Bonsai.Arduino.DigitalOutput(PortName=ard1, Pin=13)

    GroupWorkflow "Timestamped video output"
      Description:
        Will record a video of the the trial time with a time stamp in the upper right hand
        Video is only for time when the experiment timer is runing
      Workflow
        SubscribeSubject "Video feed" => #0
        -> PropertyMapping(Image) => #1
        #0 -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=500, Height=500), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #2
        #2, #1 -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=0, Height=0), Interpolation=Linear) => #3
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.LocalDateTime)
        -> Format
        -> PropertyMapping(Text) => #7
        #3, #7 -> Bonsai.Vision.Drawing.AddText
          Text="04/16/2020 18:28:18"
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          Font="Arial Narrow, 8.25pt"
          Origin(X=0, Y=0)
        -> Bonsai.Vision.Drawing.DrawCanvas => #9
        SubscribeSubject TimeStampedVideo
        -> PropertyMapping(FileName) => #11
        SubscribeSubject "timer for Exp" => #12
        #9, #12 -> TakeUntil => #13
        #13, #11 -> Bonsai.Vision.VideoWriter
          FileName="D:\Aaron\Bonsai\test2\Test1_test M1_TimeStampedVideo__2020_4_16_(18, 23).AVI"
          Suffix=None
          Buffered=true
          Overwrite=true
          FourCC=FMP4
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> WorkflowOutput

    GroupWorkflow "Track trace image output"(Description="Outputs a image of the path trace from tracking the centroid and pulls the size from the video feed")
        SubscribeSubject "centroid no NaN" => #0
        SubscribeSubject "Video feed"
        -> MemberSelector(Selector=Size)
        -> PropertyMapping(Size) => #3
        #0, #3 -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=436, Height=412), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #4
        #0 -> InputMapping(X(Selector=X), Y(Selector=Y))
        -> Bonsai.Vision.CreatePoint2f(X=381.2856, Y=344.019135)
        -> Buffer(Count=50, Skip=1)
        -> Bonsai.Dsp.ConvertToArray(Depth=nil)
        -> PropertyMapping(Points) => #9
        #4, #9 -> Bonsai.Vision.Drawing.Path(Color(Val0=255, Val1=255, Val2=255, Val3=255), Thickness=2, LineType=Connected8, Shift=0)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> Disable Bonsai.Vision.HsvThreshold(Lower(Val0=179, Val1=255, Val2=255, Val3=0), Upper(Val0=179, Val1=255, Val2=255, Val3=255))
        -> Accumulate => #13
        SubscribeSubject "Trace Image"
        -> PropertyMapping(FileName) => #15
        SubscribeSubject "timer for Exp" => #16
        #13, #16 -> Sample => #17
        #17, #15 -> Bonsai.Vision.SaveImage(FileName="D:\Aaron\Bonsai\test2\Test1_test M1_Trace Image__2020_4_16_(18, 23).jpg", Suffix=None)
        -> WorkflowOutput

    GroupWorkflow "Center Entrances Count output"(Description="Outputs a csv file with counts of entrances of centroid to the center area")
        SubscribeSubject "timer for Exp" => #0
        SubscribeSubject "Center area"
        -> DistinctUntilChanged
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it ? 1 : 0
        -> Accumulate => #4
        #4, #0 -> Sample => #5
        SubscribeSubject "Count Center Entraces"
        -> PropertyMapping(FileName) => #7
        #5, #7 -> Bonsai.IO.CsvWriter
          FileName="D:\Aaron\Bonsai\test2\Test1_test M1_Count Center Entrace_2020_4_16_(18, 23).CSV"
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false
        -> WorkflowOutput

    GroupWorkflow "Max velocity and total distance"
      Description:
        outputs a csv file with the total distance (first value) and Max velocity (second value)
        Embeded is a output of a CSV file with all the individual values for velocity
        Use to check for abnormal high values - disruption is tracking can lead to velocity artifacts
        The centroid no NaN reports the last known XY values of the centroid until new numerical values are reported.
        This results in the the distance traveled when tracking lost as reported in a single jump.
        In the velocity workflow the value in the Divide node needs to match the skip in the Buffer node to calcuate velocity correctly

        To set the rescale node determine the pixel size of a know object in the frame,
        generate a pixle/cm number,
        use this valuee to convert the total pixels in the frame to a total cm size
      Workflow
        SubscribeSubject "Dist & Vel"
        -> PropertyMapping(FileName) => #1
        SubscribeSubject FPS
        -> PropertyMapping(Value) => #3
        SubscribeSubject "centroid no NaN"
        -> Bonsai.Dsp.Difference(Order=1)
        -> Buffer(Count=1, Skip=10)
        -> Add
        -> Bonsai.Dsp.Norm(NormType=L2)
        -> Multiply(Operand=DoubleProperty(Value=10)) => #9
        SubscribeSubject "Velocity values"
        -> PropertyMapping(FileName) => #11
        SubscribeSubject "timer for Exp" => #12
        SubscribeSubject "centroid no NaN"
        -> Bonsai.Dsp.Difference(Order=1)
        -> Buffer(Count=1, Skip=3)
        -> Add
        -> Bonsai.Dsp.Norm(NormType=L2)
        -> Divide(Operand=DoubleProperty(Value=3)) => #18
        #18, #3 -> Multiply(Operand=DoubleProperty(Value=30)) => #19
        GroupWorkflow "Videofeed Pixels Height & Width in Centimeters"(Description="Calculates distance in centimeters of videofeed height and width ")
            SubscribeSubject "Video feed"
            -> Take(Count=1)
            -> MemberSelector(Selector="Size.Width,Size.Height")
            -> Bonsai.Numerics.Max => #3
            SubscribeSubject pixel/cm
            -> PropertyMapping(Value) => #5
            #5, #3 -> Divide(Operand=IntProperty(Value=7))
            -> WorkflowOutput
        -> PropertyMapping(RangeMax) => #21
        GroupWorkflow "Videofeed Pixels Height & Width"(Description="Sets the max pixel dimensions of the video feed height and width")
            SubscribeSubject "Video feed"
            -> Take(Count=1)
            -> MemberSelector(Selector="Size.Width,Size.Height")
            -> Bonsai.Numerics.Max
            -> WorkflowOutput
        -> PropertyMapping(Max) => #23
        #9, #21, #23 -> Bonsai.Dsp.Rescale(Min=0, Max=436, RangeMin=0, RangeMax=62, RescaleType=Linear)
        -> Accumulate => #25
        GroupWorkflow "Videofeed Pixels Height & Width in Centimeters"(Description="Calculates distance in centimeters of videofeed height and width ")
            SubscribeSubject "Video feed"
            -> Take(Count=1)
            -> MemberSelector(Selector="Size.Width,Size.Height")
            -> Bonsai.Numerics.Max => #3
            SubscribeSubject pixel/cm
            -> PropertyMapping(Value) => #5
            #5, #3 -> Divide(Operand=IntProperty(Value=7))
            -> WorkflowOutput
        -> PropertyMapping(RangeMax) => #27
        GroupWorkflow "Videofeed Pixels Height & Width"(Description="Sets the max pixel dimensions of the video feed height and width")
            SubscribeSubject "Video feed"
            -> Take(Count=1)
            -> MemberSelector(Selector="Size.Width,Size.Height")
            -> Bonsai.Numerics.Max
            -> WorkflowOutput
        -> PropertyMapping(Max) => #29
        #19, #29, #27 -> Bonsai.Dsp.Rescale(Min=0, Max=436, RangeMin=0, RangeMax=62, RescaleType=Linear) => #30
        #30, #11 -> Bonsai.IO.CsvWriter(FileName="D:\Aaron\Bonsai\test2\Test1_test M1_Velocity_values_2020_4_16_(18, 23).CSV", Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> Scan => #32
            WorkflowInput Source1
            -> MemberSelector(Selector="Accumulation,Value")
            -> Bonsai.Numerics.Max
            -> WorkflowOutput
        #25, #32 -> Zip => #33
        #33, #12 -> Sample => #34
        #34, #1 -> Bonsai.IO.CsvWriter
          FileName="D:\Aaron\Bonsai\test2\Test1_test M1_distance&velocity__2020_4_16_(18, 23).CSV"
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=true
        -> WorkflowOutput

    GroupWorkflow "Time Total, periphery, center"
      Description:
        Outputs a csv file with the values in seeconds for time in each zone
        1st values total time of centroid tracked in fraame
        2nd values periphery time
        3rd value center time

        This is based on the frames persecond (pulled from the FPS Subscribe node)
        FPS needs to be constant in the input
      Workflow
        SubscribeSubject FPS
        -> PropertyMapping(Value) => #1
        SubscribeSubject FPS
        -> PropertyMapping(Value(Selector=it)) => #3
        SubscribeSubject "Video feed"
        -> Condition "Whole Arena"
            WorkflowInput Source1

            SubscribeSubject "Whole Arena"
            -> Equal(Operand=BooleanProperty(Value=true))
            -> WorkflowOutput
        -> Condition "Not In center (Perimeter)"
            WorkflowInput Source1

            SubscribeSubject "Center area"
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> ElementIndex
        -> MemberSelector(Selector=Index) => #8
        #8, #1 -> Divide(Operand=IntProperty(Value=30))
        -> Scan "Time in perimeter"(Description="Time in perimeter") => #10
            WorkflowInput Source1
            -> MemberSelector(Selector="Accumulation,Value")
            -> Bonsai.Numerics.Max
            -> WorkflowOutput
        SubscribeSubject "Video feed"
        -> ElementIndex
        -> MemberSelector(Selector=Index) => #13
        #13, #3 -> Divide(Operand=IntProperty(Value=30))
        -> Scan "Total time" => #15
            WorkflowInput Source1
            -> MemberSelector(Selector="Accumulation,Value")
            -> Bonsai.Numerics.Max
            -> WorkflowOutput
        SubscribeSubject Total_Time
        -> PropertyMapping(FileName) => #17
        SubscribeSubject "timer for Exp" => #18
        #10, #18 -> Sample => #19
        SubscribeSubject "timer for Exp" => #20
        #15, #20 -> Sample => #21
        SubscribeSubject FPS
        -> PropertyMapping(Value) => #23
        SubscribeSubject "Video feed"
        -> Condition "In center"
            WorkflowInput Source1

            SubscribeSubject "Center area"
            -> Equal(Operand=BooleanProperty(Value=true))
            -> WorkflowOutput
        -> ElementIndex
        -> MemberSelector(Selector=Index) => #27
        #27, #23 -> Divide(Operand=IntProperty(Value=30))
        -> Scan "Time in center" => #29
            WorkflowInput Source1
            -> MemberSelector(Selector="Accumulation,Value")
            -> Bonsai.Numerics.Max
            -> WorkflowOutput
        SubscribeSubject "timer for Exp" => #30
        #29, #30 -> Sample => #31
        #21, #19, #31 -> Zip => #32
        #32, #17 -> Bonsai.IO.CsvWriter(FileName="D:\Aaron\Bonsai\test2\Test1_test M1_Total Time_2020_4_16_(18, 23).CSV", Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)
        -> WorkflowOutput

    GroupWorkflow "X and Y values"
      Description:
        Outputs the X and Y values for the location of the centroid with NaN values supressed
        Can be used to generate a heat map in python or MATLAB
      Workflow
        SubscribeSubject "centroid no NaN" => #0
        -> MemberSelector(Selector=X) => #1
        #0 -> MemberSelector(Selector=Y) => #2
        #1, #2 -> Zip => #3
        SubscribeSubject X_Y_postion
        -> PropertyMapping(FileName) => #5
        #3, #5 -> Bonsai.IO.CsvWriter(FileName="D:\Aaron\Bonsai\test2\Test1_test M1_X_Y_Position_2020_4_16_(18, 23).CSV", Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput

    GroupWorkflow "2D histrogram output"(Description="Outputs a image file of the generated from the 2d histogram")
        SubscribeSubject "centroid no NaN" => #0
        SubscribeSubject "Video feed"
        -> Take(Count=1)
        -> MemberSelector(Selector="Size.Width,Size.Height")
        -> PropertyMapping(MaxX(Selector=Item1), MaxY(Selector=Item2)) => #4
        #0, #4 -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=436, MinY=0, MaxY=412, BinsX=50, BinsY=50, Normalize=false, Accumulate=true) => #5
        SubscribeSubject Histogram
        -> PropertyMapping(FileName) => #7
        SubscribeSubject "timer for Exp" => #8
        #5, #8 -> Sample => #9
        #9, #7 -> Bonsai.Vision.SaveImage(FileName="D:\Aaron\Bonsai\test2\Test1_test M1_Histogram_2020_4_16_(18, 23).jpg", Suffix=None)
        -> WorkflowOutput

    GroupWorkflow "Times in center output"(Description="Outouts csv file containing the length of each episode of the centroid in the center area")
        SubscribeSubject "Time of entrance exit"
        -> PropertyMapping(FileName) => #1
        SubscribeSubject "Center area"
        -> DistinctUntilChanged
        -> TimeInterval
        -> MemberSelector(Selector="Value,Interval.TotalSeconds") => #5
        #5, #1 -> Bonsai.IO.CsvWriter
          FileName="D:\Aaron\Bonsai\test2\Test1_test M1_Time_Entrance_Exit_2020_4_16_(18, 23).CSV"
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=true
        -> WorkflowOutput
Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true) => #1
#0, #1 -> SubscribeWhen

Disable GroupWorkflow "Back up stop timer"(Description="Can be used a way to stop top workflow and video recorder if being used")
    Timer(DueTime=PT0S, Period=PT1H)
    -> WorkflowOutput

GroupWorkflow "Press I for picture of video feed"
  Description:
    Each time the "I" key is press save a single image of the video feed,
    If the trial is seperated from the anaysis can be used to create an image to be used later in a background subtraction workflow for tracking
  Workflow
    Bonsai.Windows.Input.KeyDown(Filter=I, SuppressRepetitions=true)
    -> SelectMany => #1
        WorkflowInput Source1

        SubscribeSubject "Video feed"
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject "Background image"
    -> PropertyMapping(FileName) => #3
    #1, #3 -> Bonsai.Vision.SaveImage(FileName="D:\Aaron\Bonsai\test2\Test1_test M1_Background Image__2020_4_16_(18, 23).jpg", Suffix=FileCount)
    -> WorkflowOutput

GroupWorkflow "Enter Exp Information here"
  Description:
    In side this group is workflows to name files
    Also inputs the frames per second used in distance and velocity calculations
    Can be ued to enter ID for animal and the directory where files are to be save
    Can use the current system date and time or pull entered values into the file name
  Workflow
    ExternalizedMapping(Value(DisplayName=Directory))
    -> StringProperty(Value="D:\RTPP Bonsai Raw Data\test3 oft\") => #1
    ExternalizedMapping(Value(DisplayName="Mouse ID"))
    -> StringProperty(Value="test M1") => #3
    ExternalizedMapping(Value(DisplayName="exp name"))
    -> StringProperty(Value=Test1) => #5
    StringProperty(Value=_) => #6
    StringProperty(Value=_) => #7
    #1, #5, #6, #3, #7 -> Zip
    -> Add
    -> ReplaySubject "File nameing info"(BufferSize=nil)

    GroupWorkflow "File types"
        ExternalizedMapping(Value(DisplayName=.CSV))
        -> StringProperty(Value=.CSV)
        -> ReplaySubject "CSV file"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=.JPG))
        -> StringProperty(Value=.jpg)
        -> ReplaySubject "JPG file"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=.AVI))
        -> StringProperty(Value=.AVI)
        -> ReplaySubject "AVI file"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=.png))
        -> StringProperty(Value=.png)
        -> ReplaySubject "PNG file"(BufferSize=nil)

    GroupWorkflow "Time Entrance Exit"
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow Time_Entrace_Exits => #1
            ExternalizedMapping(Value(DisplayName=Time_Entrance_Exits))
            -> StringProperty(Value=Time_Entrance_Exit)
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "CSV file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject "Time of entrance exit"(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "Dist & Velo"
        GroupWorkflow distance_&_velocity => #0
            ExternalizedMapping(Value(DisplayName="distance and velocity"))
            -> StringProperty(Value=distance&velocity_)
            -> WorkflowOutput
        SubscribeSubject "File nameing info" => #1
        SubscribeSubject "current date" => #2
        SubscribeSubject "CSV file" => #3
        #1, #0, #2, #3 -> Zip
        -> Add
        -> ReplaySubject "Dist & Vel"(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow Video
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow Video_ => #1
            ExternalizedMapping(Value(DisplayName=Video_))
            -> StringProperty(Value=Video_)
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "AVI file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject "Total Video naming"(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "Back ground Image"
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow "background image" => #1
            ExternalizedMapping(Value(DisplayName="back ground image"))
            -> StringProperty(Value="Background Image_")
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "JPG file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject "Background image"(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow Histogram
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow histogram => #1
            ExternalizedMapping(Value(DisplayName=Histogram))
            -> StringProperty(Value=Histogram)
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "JPG file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject Histogram(BufferSize=nil)
        -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=Frames/second))
    -> IntProperty(Value=30)
    -> ReplaySubject FPS(BufferSize=nil)

    ExternalizedMapping(Value(DisplayName=Pixels/centimeter))
    -> IntProperty(Value=7)
    -> ReplaySubject pixel/cm(BufferSize=nil)

    GroupWorkflow "Current date"(Description="Provides the date and time to the file name")
        StringProperty(Value=_) => #0
        StringProperty(Value=_) => #1
        StringProperty(Value=_) => #2
        StringProperty(Value=_) => #3
        IntProperty(Value=0)
        -> Timestamp => #5
        -> MemberSelector(Selector=Timestamp.Year)
        -> Format(Format="", Selector=it) => #7
        #5 -> MemberSelector(Selector=Timestamp.Month)
        -> Format(Format="", Selector=it) => #9
        #5 -> MemberSelector(Selector=Timestamp.DateTime.Day)
        -> Format(Format="", Selector=it) => #11
        #5 -> MemberSelector(Selector="Timestamp.DateTime.TimeOfDay.Hours,Timestamp.DateTime.TimeOfDay.Minutes")
        -> Format(Format="", Selector=it) => #13
        #0, #7, #1, #9, #2, #11, #3, #13 -> Zip
        -> Add
        -> ReplaySubject "current date"(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "X_Y Postion"
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow X_Y(Description="X and Y values from rescale node") => #1
            ExternalizedMapping(Value(DisplayName=X_Y_Position))
            -> StringProperty(Value=X_Y_Position)
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "CSV file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject X_Y_postion(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "Trace image"
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow "Trace Image_" => #1
            ExternalizedMapping(Value(DisplayName="Trace image"))
            -> StringProperty(Value="Trace Image_")
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "JPG file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject "Trace Image"(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "TimeStamped Video"
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow Video_ => #1
            ExternalizedMapping(Value(DisplayName=Video_))
            -> StringProperty(Value=TimeStampedVideo_)
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "AVI file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject TimeStampedVideo(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "Count Center Entraces"
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow "Count entrances"(Description="Count of entrace to center") => #1
            ExternalizedMapping(Value)
            -> StringProperty(Value="Count Center Entrace")
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "CSV file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject "Count Center Entraces"(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "total time"
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow "Total times"(Description="All, perim, center") => #1
            ExternalizedMapping(Value(DisplayName=Time_Entrance_Exits))
            -> StringProperty(Value="Total Time")
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "CSV file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject Total_Time(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "Velocity values"
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow "Velocity values" => #1
            ExternalizedMapping(Value(DisplayName=Time_Entrance_Exits))
            -> StringProperty(Value=Velocity_values)
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "CSV file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject "Velocity values"(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "Intra trial Video"
        SubscribeSubject "File nameing info" => #0
        GroupWorkflow Trial_Video_ => #1
            ExternalizedMapping(Value(DisplayName=Video_))
            -> StringProperty(Value=Video_)
            -> WorkflowOutput
        SubscribeSubject "current date" => #2
        SubscribeSubject "AVI file" => #3
        #0, #1, #2, #3 -> Zip
        -> Add
        -> ReplaySubject "Intra Trial Video"(BufferSize=nil)
        -> WorkflowOutput

GroupWorkflow "Tracking and video feed"(Description="Contains the workflows for generating centroid and centroid with Nan values suppresed")
    Disable Bonsai.Video.VideoCaptureDevice(Index=0)
    -> Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Bonsai.Vision.FileCapture(FileName="D:\MISC\VGLUT Cre C189 WMA.mp4", PlaybackRate=0, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true)
    -> Bonsai.Vision.Crop(RegionOfInterest(X=137, Y=26, Width=436, Height=412))
    -> PublishSubject "Video feed"

    SubscribeSubject "Video feed"
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=60, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
    -> PublishSubject "background sub"
    -> Bonsai.Vision.FindContours(Mode=Tree, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=500, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Bonsai.Vision.Centroid
    -> PublishSubject Centroid
    -> WorkflowOutput

    Disable SubscribeSubject "Video feed"
    -> Disable Bonsai.Vision.HsvThreshold(Lower(Val0=17, Val1=27, Val2=15, Val3=0), Upper(Val0=179, Val1=255, Val2=255, Val3=255))
    -> Disable Bonsai.Vision.FindContours(Mode=Tree, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=nil)
    -> Disable Bonsai.Vision.BinaryRegionAnalysis
    -> Disable Bonsai.Vision.LargestBinaryRegion
    -> Disable Bonsai.Vision.Centroid
    -> Disable PublishSubject "HSV centroid"

    GroupWorkflow "Centroid no NaN"
      Description:
        Outputs the last known XY value for the centroid each frame when tracking is disrupted
        Prevents the NaN value generated from the Centroid node from stopping Scan and Accumulate nodes used later in the workflow
        Can introduce artifacts in distance and velocity values depending on duration frequecny of disruption tracking
      Workflow
        SubscribeSubject "Video feed" => #0
        SubscribeSubject Centroid
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import *
            from System import Single

            @returns(Point2f)

            def process(value):
              if Single.IsNaN(value.X) or Single.IsNaN(value.Y):

                return Point2f.Zero
              else:
                return value
        -> Condition => #3
            WorkflowInput Source1
            -> NotEqual(Operand=WorkflowProperty<OpenCV.Net.Point2f>(Value(X=0, Y=0)))
            -> WorkflowOutput
        #0, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> PublishSubject "centroid no NaN"
        -> WorkflowOutput

Disable Bonsai.Arduino.CreateArduino(Name=ard1, PortName=COM5, BaudRate=57600, SamplingInterval=19)

Disable GroupWorkflow "Video recorder"(Description="Outputs a video file of the entire time the workflow is running")
    SubscribeSubject "Total Video naming"
    -> PropertyMapping(FileName) => #1
    SubscribeSubject "Video feed" => #2
    #1, #2 -> Disable Bonsai.Vision.VideoWriter
      FileName="D:\Aaron\Bonsai\test2\Test1_test M1_Video__2020_4_13_(21, 53).AVI"
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> WorkflowOutput
