<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>61</cv:Val0>
            <cv:Val1>133</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>92</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Green Present</Name>
        <Description>Object detected</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>10000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>145</cv:Val0>
            <cv:Val1>196</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>57</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Red Present</Name>
        <Description>Object detected</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>10000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Description />
        <scr:Expression>new(
Item2 &gt; Item3 ? (Item1 &gt; Item2 ? 1 : 2) : 3 as port,
Math.Max(Item1,Math.Max(Item2, Item3)) as activation)</scr:Expression>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Activation0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>port</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Threshold" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Port" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>activation</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="6" Label="Source2" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>4</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Activation1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>port</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Threshold" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Port" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>activation</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="6" Label="Source2" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>7</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Activation2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>port</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Threshold" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Port" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>activation</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="6" Label="Source2" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="9" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="21" Label="Source1" />
      <Edge From="17" To="24" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>