<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>163</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>1</cv:BackgroundFrames>
          <cv:AdaptationRate>1</cv:AdaptationRate>
          <cv:ThresholdValue>0</cv:ThresholdValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
          <cv:SubtractionMethod>Absolute</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>30</dsp:SampleRate>
          <dsp:Cutoff1>30</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:KernelLength>30</dsp:KernelLength>
          <dsp:FilterType>LowPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>213</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>213</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>213</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>426</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>213</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>Maximal Activation</scr:Name>
        <scr:Expression>new(
Item2 &gt; Item3 ? (Item1 &gt; Item2 ? 1 : 2) : (Item1 &gt; Item3 ? 1 : 3) as port,
Math.Max(Item1,Math.Max(Item2, Item3)) as activation)</scr:Expression>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Activation3</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>port</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Threshold" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Port" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>activation</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>200000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="6" Label="Source2" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>4</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>fear_conditioning_day1.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="9" Label="Source1" />
      <Edge From="3" To="12" Label="Source1" />
      <Edge From="3" To="15" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="18" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source3" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>