<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>3</cv:Size1>
          <cv:Size2>0</cv:Size2>
          <cv:Sigma1>0</cv:Sigma1>
          <cv:Sigma2>0</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>163</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Threshold</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Present</Name>
        <Description>Object detected</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>10000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Present</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>1</cv:BackgroundFrames>
          <cv:AdaptationRate>1</cv:AdaptationRate>
          <cv:ThresholdValue>0</cv:ThresholdValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
          <cv:SubtractionMethod>Absolute</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MorphologicalOperator">
          <cv:Size>
            <cv:Width>3</cv:Width>
            <cv:Height>3</cv:Height>
          </cv:Size>
          <cv:Anchor>
            <cv:X>1</cv:X>
            <cv:Y>1</cv:Y>
          </cv:Anchor>
          <cv:Shape>Rectangle</cv:Shape>
          <cv:Iterations>1</cv:Iterations>
          <cv:Operation>Erode</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="SkipWhile">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>100000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>30</dsp:SampleRate>
          <dsp:Cutoff1>3</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:KernelLength>30</dsp:KernelLength>
          <dsp:FilterType>LowPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="DoubleProperty">
          <Value>450000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>FreezingOnset</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="SkipWhile">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>100000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>426</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>213</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>200000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>ROIactivation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT3S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Immobile</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value,Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>TimestampPulse</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Size" Selector="Size" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:CreateCanvas">
          <drw:Size>
            <drw:Width>640</drw:Width>
            <drw:Height>480</drw:Height>
          </drw:Size>
          <drw:Depth>U8</drw:Depth>
          <drw:Channels>3</drw:Channels>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>0</drw:Val3>
          </drw:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Image" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:AddImage">
          <drw:Destination>
            <drw:X>0</drw:X>
            <drw:Y>0</drw:Y>
            <drw:Width>0</drw:Width>
            <drw:Height>0</drw:Height>
          </drw:Destination>
          <drw:Interpolation>Linear</drw:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Immobile</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:AddText">
          <drw:Text>Immobile</drw:Text>
          <drw:Alignment>Near</drw:Alignment>
          <drw:LineAlignment>Near</drw:LineAlignment>
          <drw:TextRenderingHint>AntiAliasGridFit</drw:TextRenderingHint>
          <drw:Color>
            <drw:Val0>255</drw:Val0>
            <drw:Val1>255</drw:Val1>
            <drw:Val2>255</drw:Val2>
            <drw:Val3>255</drw:Val3>
          </drw:Color>
          <drw:Font>Microsoft Sans Serif, 8.142858pt</drw:Font>
          <drw:Origin>
            <drw:X>0</drw:X>
            <drw:Y>0</drw:Y>
          </drw:Origin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:DrawCanvas" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="15" Label="Source1" />
      <Edge From="5" To="31" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="30" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="32" Label="Source2" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="41" Label="Source1" />
      <Edge From="40" To="41" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="50" To="53" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source2" />
      <Edge From="53" To="56" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source2" />
      <Edge From="56" To="59" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source2" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>