<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>Day3_Mouse1_CNO.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>210</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>53</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>247</cv:Width>
            <cv:Height>260</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>3</cv:Size1>
          <cv:Size2>0</cv:Size2>
          <cv:Sigma1>0</cv:Sigma1>
          <cv:Sigma2>0</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>27</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Threshold</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Present</Name>
        <Description>Object detected</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>10000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Present</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>1</cv:BackgroundFrames>
          <cv:AdaptationRate>1</cv:AdaptationRate>
          <cv:ThresholdValue>70</cv:ThresholdValue>
          <cv:ThresholdType>Truncate</cv:ThresholdType>
          <cv:SubtractionMethod>Absolute</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MorphologicalOperator">
          <cv:Size>
            <cv:Width>3</cv:Width>
            <cv:Height>3</cv:Height>
          </cv:Size>
          <cv:Anchor>
            <cv:X>1</cv:X>
            <cv:Y>1</cv:Y>
          </cv:Anchor>
          <cv:Shape>Rectangle</cv:Shape>
          <cv:Iterations>1</cv:Iterations>
          <cv:Operation>Erode</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="SkipWhile">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>100000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>30</dsp:SampleRate>
          <dsp:Cutoff1>3</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:KernelLength>30</dsp:KernelLength>
          <dsp:FilterType>LowPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="DoubleProperty">
          <Value>500</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Immobility</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>FreezingOnset</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>freezing_Onset.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value,Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>TimestampPulse</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Immobility</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Immobility.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="16" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="40" To="42" Label="Source1" />
      <Edge From="41" To="42" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>