<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>ArduinoInput</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>A</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM5</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>COM5</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i</Pattern>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>ArduinoInput</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>4</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>5</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>6</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>sound.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="1" To="16" Label="Source1" />
            <Edge From="1" To="20" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="24" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="24" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="24" Label="Source3" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="24" Label="Source4" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source5" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>