<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>3</cv:Size1>
          <cv:Size2>0</cv:Size2>
          <cv:Sigma1>0</cv:Sigma1>
          <cv:Sigma2>0</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>163</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Present</Name>
        <Description>Object detected</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>10000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>1</cv:BackgroundFrames>
          <cv:AdaptationRate>1</cv:AdaptationRate>
          <cv:ThresholdValue>0</cv:ThresholdValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
          <cv:SubtractionMethod>Absolute</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="SkipWhile">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>100000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>30</dsp:SampleRate>
          <dsp:Cutoff1>3</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:KernelLength>30</dsp:KernelLength>
          <dsp:FilterType>LowPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="DoubleProperty">
          <Value>450000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Immobile</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Immobile</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it ? 255 : 0</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FillValue" Selector="it,it,it,it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MaskPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>31</cv:X>
                <cv:Y>443</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>-18</cv:X>
                <cv:Y>443</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>-18</cv:X>
                <cv:Y>510</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>31</cv:X>
                <cv:Y>510</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZeroInv</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>255</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="11" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="28" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>