<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:p2="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p3="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>1</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
          <p1:NumBuffers>10</p1:NumBuffers>
          <p1:GrabMode>BufferFrames</p1:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="p2:CsvWriter">
        <p2:FileName>100219_gal-cre_M3_cam3_timestamp.csv</p2:FileName>
        <p2:Append>false</p2:Append>
        <p2:Overwrite>true</p2:Overwrite>
        <p2:Suffix>None</p2:Suffix>
        <p2:IncludeHeader>false</p2:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p3:VideoWriter">
          <p3:FileName>100219_gal-cre_M3_video3.avi</p3:FileName>
          <p3:Suffix>None</p3:Suffix>
          <p3:Buffered>true</p3:Buffered>
          <p3:Overwrite>true</p3:Overwrite>
          <p3:FourCC>FMP4</p3:FourCC>
          <p3:FrameRate>30</p3:FrameRate>
          <p3:FrameSize>
            <p3:Width>0</p3:Width>
            <p3:Height>0</p3:Height>
          </p3:FrameSize>
          <p3:ResizeInterpolation>NearestNeighbor</p3:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalOutput">
          <mx:Channels>
            <mx:DigitalOutputChannelConfiguration>
              <mx:ChannelName>Dev1</mx:ChannelName>
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port0/line1</mx:Lines>
            </mx:DigitalOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>3</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:CsvWriter">
        <p2:FileName>VID_TEST.CSV</p2:FileName>
        <p2:Append>false</p2:Append>
        <p2:Overwrite>true</p2:Overwrite>
        <p2:Suffix>None</p2:Suffix>
        <p2:IncludeHeader>false</p2:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>