<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.2.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q3="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio" xmlns:q4="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:q5="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SkipUntil" />
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Entry</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Skip">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Area</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ROI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:FindContours">
                <q1:Mode>External</q1:Mode>
                <q1:Method>ChainApproxNone</q1:Method>
                <q1:Offset>
                  <q1:X>0</q1:X>
                  <q1:Y>0</q1:Y>
                </q1:Offset>
                <q1:MinArea xsi:nil="true" />
                <q1:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Threshold">
                <q1:ThresholdValue>253</q1:ThresholdValue>
                <q1:MaxValue>255</q1:MaxValue>
                <q1:ThresholdType>Binary</q1:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Crop">
                <q1:RegionOfInterest>
                  <q1:X>370</q1:X>
                  <q1:Y>439</q1:Y>
                  <q1:Width>47</q1:Width>
                  <q1:Height>159</q1:Height>
                </q1:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Image</Selector>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FlyCapture">
          <q2:Index>0</q2:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:AudioReader">
          <q3:FileName>150ms 500Hz square.wav</q3:FileName>
          <q3:BufferLength>10</q3:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:AnalogInput">
          <q4:PortName>COM4</q4:PortName>
          <q4:Pin>0</q4:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DigitalOutput">
          <q4:PortName>COM4</q4:PortName>
          <q4:Pin>12</q4:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Repeat" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="q5:ExpressionTransform">
        <q5:Expression>Math.Atan2(Y-45,X-45)</q5:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:AudioPlayback">
          <q3:Frequency>44100</q3:Frequency>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>0</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>12</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Reactive.SkipUntil, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Skip, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Audio.AudioReader, Bonsai.Audio, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.AnalogInput, Bonsai.Arduino, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Arduino.DigitalOutput, Bonsai.Arduino, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Audio.AudioPlayback, Bonsai.Audio, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>