<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseMove" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>mouseX.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>mouseY.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>IsEmpty</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>mouseStop.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>VideoData.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>