<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>61</cv:Val0>
            <cv:Val1>133</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>92</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Green Present</Name>
        <Description>Object detected</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>10000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>145</cv:Val0>
            <cv:Val1>196</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>57</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Red Present</Name>
        <Description>Object detected</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>10000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>109</cv:Val0>
            <cv:Val1>156</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>77</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Blue Present</Name>
        <Description>Object detected</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>5000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.Millisecond</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="23" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="9" Label="Source1" />
      <Edge From="1" To="16" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>