<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>3</cv:Size1>
          <cv:Size2>0</cv:Size2>
          <cv:Sigma1>0</cv:Sigma1>
          <cv:Sigma2>0</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>163</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>426</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>213</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>2000000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>ROIactivation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT3S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>A</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM3</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>